<?xml version="1.0" encoding="UTF-8" standalone="no"?>
<batch mzmine_version="4.8.30">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            <file>X:\Data\ChrisB\Non-Target\gcms_pipeline\converted\NYC-71322-2-2B_20251210.mzML</file>
            <file>X:\Data\ChrisB\Non-Target\gcms_pipeline\converted\NYC-71322-2-3A_20251210.mzML</file>
            <file>X:\Data\ChrisB\Non-Target\gcms_pipeline\converted\NYC-71322-2-3B_20251210.mzML</file>
        </parameter>
        <parameter name="Vendor data options">
            <parameter name="Try vendor centroiding">true</parameter>
            <parameter name="Remove calibrant signals (Thermo)">true</parameter>
            <parameter name="Apply lockmass on import (Waters)" selected="true">
                <parameter name="Positive lockmass">556.276575</parameter>
                <parameter name="Negative lockmass">554.262022</parameter>
            </parameter>
            <parameter name="Waters MassLynx data import">native</parameter>
        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="All MS levels">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">500.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>2.990000009536743</min>
                <max>124.5</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">1000.0</parameter>
        <parameter name="Minimum absolute height">1000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="false">
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        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05000000074505806</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">1000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.5000000223517418</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_spectraldeconvolutiongc.SpectralDeconvolutionGCModule" module_name="GC-EI spectral deconvolution" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Deconvolution algorithm" selected_item="rt grouping and shape correlation">
            <module name="rt grouping and shape correlation">
                <parameter name="Retention time tolerance" unit="MINUTES">0.04</parameter>
                <parameter name="Minimum signals in pseudo spectrum">8</parameter>
                <parameter name="Minimum shape similarity">0.8</parameter>
            </module>
        </parameter>
        <parameter name="Name suffix">decon</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Exclude m/z-values" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.norm_rtcalibration.RTCorrectionModule" module_name="Retention time correction on feature lists" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">rt_cal</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.004</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Minimum standard intensity">1000.0</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_gc.GCAlignerModule" module_name="GC aligner" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">0.5</parameter>
        <parameter name="Similarity" selected_item="Composite cosine identity (e.g., GC-EI-MS; similar to NIST search)">
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            <module name="Composite cosine identity (e.g., GC-EI-MS; similar to NIST search)">
                <parameter name="Weights">NIST (GC) (mz^3 * I^0.6)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
        </parameter>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Minimum aligned samples" selected="true">
            <abs>1</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.group_spectral_networking.MainSpectralNetworkingModule" module_name="Spectral / Molecular Networking" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Algorithm" selected_item="Cosine similarity (GC-EI-MS)">
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            <module name="Cosine similarity (GC-EI-MS)">
                <parameter name="m/z tolerance">
                    <absolutetolerance>0.005</absolutetolerance>
                    <ppmtolerance>20.0</ppmtolerance>
                </parameter>
                <parameter name="Minimum matched signals">8</parameter>
                <parameter name="Min cosine similarity">0.7</parameter>
                <parameter name="Signal filters">
                    <parameter name="Crop to top N signals">250</parameter>
                    <parameter name="Signal threshold (intensity filter)">50</parameter>
                    <parameter name="Intensity filter at &gt;N signals">0.98</parameter>
                </parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_network_graphml.NetworkGraphMlExportModule" module_name="Export spectral networks to graphml (FBMN/IIMN)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>X:\Data\ChrisB\Non-Target\gcms_pipeline\mzmine_output\mzmine_output_mzmine_networking.graphml</current_file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" module_name="Export molecular networking files (e.g., GNPS, FBMN, IIMN, MetGem)" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>X:\Data\ChrisB\Non-Target\gcms_pipeline\mzmine_output_gc_ei_gnps</current_file>
        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">single_merged_scan</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.005</absolutetolerance>
                    <ppmtolerance>20.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="Intensity normalization" scientific="false">no_normalization</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_msp.AdapMspExportModule" module_name="Export to MSP file (ADAP)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>X:\Data\ChrisB\Non-Target\gcms_pipeline\mzmine_output_gc_ei.msp</current_file>
        </parameter>
        <parameter name="Add retention time" selected="true">RT</parameter>
        <parameter name="Add ANOVA p-value (if calculated)" selected="true">ANOVA_P_VALUE</parameter>
        <parameter name="Integer m/z" selected="false">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</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.batchmode.autosave.AutoSaveBatchModule" module_name="Save current batch" parameter_version="1">
        <parameter name="Save batch to" selected="true">
            <current_file>X:\Data\ChrisB\Non-Target\gcms_pipeline\mzmine_output_batch.mzbatch</current_file>
        </parameter>
    </batchstep>
</batch>
